CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', '! ADD the 8x8 binned DAPI image to detect areas occupied by cells ("ROIs")']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['identify nuclei from compressed DAPI image ', '', '8x8 binning --> 1 pixel = 1.3 µm / 1 µm = 0.77 pixel', '4 pixel = 5.2 µm', '3000 pixel = 3900 µm', '', '! ADJUST lower and upper bounds on threshold']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
    Select the input image:DAPI
    Name the primary objects to be identified:nucleus_object
    Typical diameter of objects, in pixel units (Min,Max):4,3000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.05
    Lower and upper bounds on threshold:0.05,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:100
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:6|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notes:['expand nuclei to the cell borders']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
    Select the input objects:nucleus_object
    Name the objects to be identified:cell_object
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DAPI
    Number of pixels by which to expand the primary objects:4
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
SplitOrMergeObjects:[module_num:7|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notes:['merge touching cells to identify regions of interest (ROI). ', 'The bounding box of merged cells will be used to cut ROI from original, uncompressed image files and further analysis (in situ signal detection).']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
    Select the input objects:cell_object
    Name the new objects:ROI
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
MeasureObjectSizeShape:[module_num:8|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notes:['Measure object size and shape of merged cells (=ROIs)']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
    Select object sets to measure:ROI
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

ConvertObjectsToImage:[module_num:9|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notes:['Convert ROI objects to binary image to be used as mask.']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
    Select the input objects:ROI
    Name the output image:ROI_mask
    Select the color format:Binary (black & white)
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
SaveCroppedObjects:[module_num:10|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notes:['Crop and save individual binary ROI images to be used as mask.', '', '! CHANGE output folder']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
    Do you want to save cropped images or object masks?:Images
    Objects:ROI
    Directory:Default Input Folder sub-folder|ROI_mask\\293LB
    Prefix saved crop image name with input image name?:No
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    Save output crops in nested folders?:No
    Saved file format:16-bit tiff
    Image to crop:ROI_mask

ExportToSpreadsheet:[module_num:11|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notes:['Export the ROI bounding box values to a spreadsheet.', '', '! CHANGE output folder']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|ROI_mask\\293LB
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:ROI|AreaShape_BoundingBoxMinimum_X,ROI|AreaShape_BoundingBoxMinimum_Y,ROI|AreaShape_BoundingBoxMaximum_X,ROI|AreaShape_BoundingBoxMaximum_Y,ROI|AreaShape_Area,Image|ExecutionTime_02Metadata,Image|ExecutionTime_06IdentifySecondaryObjects,Image|ExecutionTime_07SplitOrMergeObjects,Image|ExecutionTime_04Groups,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_10SaveCroppedObjects,Image|ExecutionTime_09ConvertObjectsToImage,Image|ExecutionTime_08MeasureObjectSizeShape,Image|ExecutionTime_01Images,Image|ExecutionTime_05IdentifyPrimaryObjects,Image|Count_cell_object,Image|Count_ROI,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
RescaleIntensity:[module_num:12|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notes:['Normalize DAPI image for better visibility of output image.']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
    Select the input image:DAPI
    Name the output image:DAPI_rescale_intensity
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:13|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notes:['Overlay outlines of detected ROIs on output image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI_rescale_intensity
    Name the output image:DAPI_ROI_outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:ROI

DisplayDataOnImage:[module_num:14|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notes:['Display the number (ID number) on all detected ROIs on output image.']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
    Display object or image measurements?:Object
    Select the input objects:ROI
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:DAPI_ROI_outlines
    Text color:red
    Name the output image that has the measurements displayed:DAPI_ROI_num
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:15|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notes:['Save the output image with normalized DAPI image, ROI outlines and ROI ID numbers.', '', '! CHANGE output folder']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
    Select the type of image to save:Image
    Select the image to save:DAPI_ROI_num
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_ROI_num
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|ROI_mask\\293LB
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
