CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:132
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', '! ADD these images:', '- ROI full res original scan', '- ROI full res BG scan (if available)', '- ROI mask binary images']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', '! IF no BG scan is available: change rule criteria to "file does not contain BG" for ALL images']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:15
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI") (file doesnot contain "BG")
    Name to assign these images:Nucleus_raw_image
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "DAPI") (file does contain "BG")
    Name to assign these images:Nucleus_BG_image
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Cy5") (file doesnot contain "BG")
    Name to assign these images:cy5_raw_image
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Cy5") (file does contain "BG")
    Name to assign these images:cy5_BG_image
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Cy7") (file doesnot contain "BG")
    Name to assign these images:cy7_raw_image
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Cy7") (file does contain "BG")
    Name to assign these images:cy7_BG_image
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Cy3") (file doesnot contain "BG")
    Name to assign these images:cy3_raw_image
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Cy3") (file does contain "BG")
    Name to assign these images:cy3_BG_image
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Atto425") (file doesnot contain "BG")
    Name to assign these images:atto425_raw_image
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Atto425") (file does contain "BG")
    Name to assign these images:atto425_BG_image
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Atto488") (file doesnot contain "BG")
    Name to assign these images:atto488_raw_image
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Atto488") (file does contain "BG")
    Name to assign these images:atto488_BG_image
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "TR") (file doesnot contain "BG")
    Name to assign these images:texasred_raw_image
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "TR") (file does contain "BG")
    Name to assign these images:texasred_BG_image
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "ROI") (file doesnot contain "Atto") (file doesnot contain "TR") (file doesnot contain "Cy") (file doesnot contain "DAPI")
    Name to assign these images:ROI_mask_image
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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notes:['Background subtraction: ', 'There is often high autofluorescence which impairs in situ signal detection.', 'To improve the signal to background ratio, in situ signals are stripped from the sample, the background (BG) image is scanned and aligned and finally subtracted from the original scan.', '', 'ADJUST multiplication factor for each sample: in the test mode,  hover the mouse over several autofluorescent areas in the cytoplasm to check intensity values - after BG subtraction, the intensity should be close to 0 without losing in situ signals.', '', '! IF no BG scan is available, set multiplication factor of second (=BG) image to 0.', '']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:cy7_sub_BG_image
    Image or measurement?:Image
    Select the first image:cy7_raw_image
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:cy7_BG_image
    Multiply the second image by:0.8
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
ImageMath:[module_num:6|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notes:['Background subtraction: ', 'There is often high autofluorescence which impairs in situ signal detection.', 'To improve the signal to background ratio, in situ signals are stripped from the sample, the background (BG) image is scanned and aligned and finally subtracted from the original scan.', '', 'ADJUST multiplication factor for each sample: in the test mode,  hover the mouse over several autofluorescent areas in the cytoplasm to check intensity values - after BG subtraction, the intensity should be close to 0 without losing in situ signals.', '! IF no BG scan is available, set multiplication factor of second (=BG) image to 0.']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:atto425_sub_BG_image
    Image or measurement?:Image
    Select the first image:atto425_raw_image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:atto425_BG_image
    Multiply the second image by:0.2
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
ImageMath:[module_num:7|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notes:['Background subtraction: ', 'There is often high autofluorescence which impairs in situ signal detection.', 'To improve the signal to background ratio, in situ signals are stripped from the sample, the background (BG) image is scanned and aligned and finally subtracted from the original scan.', '', 'ADJUST multiplication factor for each sample: in the test mode,  hover the mouse over several autofluorescent areas in the cytoplasm to check intensity values - after BG subtraction, the intensity should be close to 0 without losing in situ signals.', '! IF no BG scan is available, set multiplication factor of second (=BG) image to 0.']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:atto488_sub_BG_image
    Image or measurement?:Image
    Select the first image:atto488_raw_image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:atto488_BG_image
    Multiply the second image by:0.3
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
ImageMath:[module_num:8|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notes:['Background subtraction: ', 'There is often high autofluorescence which impairs in situ signal detection.', 'To improve the signal to background ratio, in situ signals are stripped from the sample, the background (BG) image is scanned and aligned and finally subtracted from the original scan.', '', 'ADJUST multiplication factor for each sample: in the test mode,  hover the mouse over several autofluorescent areas in the cytoplasm to check intensity values - after BG subtraction, the intensity should be close to 0 without losing in situ signals.', '! IF no BG scan is available, set multiplication factor of second (=BG) image to 0.']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:cy3_sub_BG_image
    Image or measurement?:Image
    Select the first image:cy3_raw_image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:cy3_BG_image
    Multiply the second image by:0.4
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
ImageMath:[module_num:9|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notes:['Background subtraction: ', 'There is often high autofluorescence which impairs in situ signal detection.', 'To improve the signal to background ratio, in situ signals are stripped from the sample, the background (BG) image is scanned and aligned and finally subtracted from the original scan.', '', 'ADJUST multiplication factor for each sample: in the test mode,  hover the mouse over several autofluorescent areas in the cytoplasm to check intensity values - after BG subtraction, the intensity should be close to 0 without losing in situ signals.', '! IF no BG scan is available, set multiplication factor of second (=BG) image to 0.']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:cy5_sub_BG_image
    Image or measurement?:Image
    Select the first image:cy5_raw_image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:cy5_BG_image
    Multiply the second image by:0.5
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
ImageMath:[module_num:10|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notes:['Background subtraction: ', 'There is often high autofluorescence which impairs in situ signal detection.', 'To improve the signal to background ratio, in situ signals are stripped from the sample, the background (BG) image is scanned and aligned and finally subtracted from the original scan.', '', 'ADJUST multiplication factor for each sample: in the test mode,  hover the mouse over several autofluorescent areas in the cytoplasm to check intensity values - after BG subtraction, the intensity should be close to 0 without losing in situ signals.', '! IF no BG scan is available, set multiplication factor of second (=BG) image to 0.']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:texasred_sub_BG_image
    Image or measurement?:Image
    Select the first image:texasred_raw_image
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:texasred_BG_image
    Multiply the second image by:0.4
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
Resize:[module_num:11|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notes:['ROIs were identified in the 8x8 binned DAPI image.', 'A binary image of each ROI was saved as ROI_mask_image.', 'The bounding box values of each ROI were multiplied by 8 to scale them to the full resolution image and ROIs were cropped from the full resolution image.', '', 'This module resizes the ROI_mask_image (multiply by 8) to scale it to the full resolution image.']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
    Select the input image:ROI_mask_image
    Name the output image:ROI_mask_resized_image
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:8
    Y Resizing factor:8
    Z Resizing factor:1.0
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

MaskImage:[module_num:12|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notes:['ROIs were identified in the 8x8 binned DAPI image.', 'A binary image of each ROI was saved as ROI_mask_image.', 'The bounding box values of each ROI were multiplied by 8 to scale them to the full resolution image and ROIs were cropped from the full resolution image.', '', 'The ROI_mask_image was resized (multiplied by 8) to scale it to the full resolution image.', 'This module uses the ROI_mask_resized_image to mask the Nucleus_raw_image.', 'This ensures, that cells which do not belong to this ROI but are located within its bounding box are removed from this ROI.']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
    Select the input image:Nucleus_raw_image
    Name the output image:Nucleus_masked_image
    Use objects or an image as a mask?:Image
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    Select image for mask:ROI_mask_resized_image
    Invert the mask?:No

RescaleIntensity:[module_num:13|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notes:['This module rescales the intensity of the DAPI staining so that low intensity staining will be visible in the output images.']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
    Select the input image:Nucleus_raw_image
    Name the output image:Nucleus_enhanced_image
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:14|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notes:['This module identifies high intensity nuclei from DAPI staining.', '', 'Nuclei are detected in a 2-step approach, high intensity and low intensity nuclei, which are then combined.', 'This decreases the problem of undersegmentation of high intensity nuclei and oversegmentation/loss of low intensity nuclei.', '', 'ADJUST the typical diameter of objects according to the cell line and magnification (e.g. 30-130 pixels for VCaP cells in 40x magnification; PC-3 cells are much larger)', 'ADJUST lower and upper bounds on threshold (and if necessary the threshold correction factor), to get the best results for identification and declumping of nuclei! In the test mode, you can hover the mouse over the nuclei to get an idea about pixel intensity values (always between 0-1).', '', '60 pixel = 10 µm']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
    Select the input image:Nucleus_masked_image
    Name the primary objects to be identified:high_int_Nucleus_object
    Typical diameter of objects, in pixel units (Min,Max):30,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.4
    Lower and upper bounds on threshold:0.15,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:15|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notes:['This module identifies low intensity nuclei from DAPI staining.', '', 'Nuclei are detected in a 2-step approach, high intensity and low intensity nuclei, which are then combined.', 'This decreases the problem of undersegmentation of high intensity nuclei and oversegmentation/loss of low intensity nuclei.', '', 'ADJUST the typical diameter of objects according to the cell line and magnification (e.g. 30-130 pixels for VCaP cells in 40x magnification; PC-3 cells are much larger)', 'ADJUST lower and upper bounds on threshold (and if necessary the threshold correction factor), to get the best results for identification and declumping of nuclei! In the test mode, you can hover the mouse over the nuclei to get an idea about pixel intensity values (always between 0-1).', '', '60 pixel = 10 µm']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
    Select the input image:Nucleus_masked_image
    Name the primary objects to be identified:low_int_Nucleus_object
    Typical diameter of objects, in pixel units (Min,Max):30,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.4
    Lower and upper bounds on threshold:0.05,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
CombineObjects:[module_num:16|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notes:['Nuclei are detected in a 2-step approach, high intensity and low intensity nuclei, which are combined in this module.', 'This decreases the problem of undersegmentation of high intensity nuclei and oversegmentation/loss of low intensity nuclei.']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
    Select initial object set:high_int_Nucleus_object
    Select object set to combine:low_int_Nucleus_object
    Select how to handle overlapping objects:Merge
    Name the combined object set:Nucleus_merged_object

MeasureObjectSizeShape:[module_num:17|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notes:['Nuclei are detected in a 2-step approach, high intensity and low intensity nuclei, which are then combined.', 'This decreases the problem of undersegmentation of high intensity nuclei and oversegmentation/loss of low intensity nuclei.', '', 'The combine module may create tiny "remnants" outside the combined nuclei. They can be removed based on their size.', 'This module measures the size of all combined nucleus objects.']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
    Select object sets to measure:Nucleus_merged_object
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:18|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notes:['Nuclei are detected in a 2-step approach, high intensity and low intensity nuclei, which are then combined.', 'This decreases the problem of undersegmentation of high intensity nuclei and oversegmentation/loss of low intensity nuclei.', '', 'The combine module may create tiny "remnants" outside the combined nuclei. They can be removed based on their size.', 'This module removes nuclei with area <700 pixels (~radius 15 pixel or 2.5 µm)']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
    Select the objects to filter:Nucleus_merged_object
    Name the output objects:Nucleus_object
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:700
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:19|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notes:['This module measures the area of the "final" nucleus objects.']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
    Select object sets to measure:Nucleus_object
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:20|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notes:['Cell borders are identified by enlarging the nuclei by a specified number of pixels.', 'Most CTCs have larger nuclei and Cytoplasm than PBMCs. If cell borders for small and large nuclei were drawn the same size, in situ signals of neighboring CTCs (or false positive in situ signals from unspecific background/artefacts) would be wrongfully assigned to PBMCs.', '', 'In this module, we split the nucleus objects into two object sets based on their area.', '', 'Note: in 3 control samples 233LB, 235LB, 237LB (no tumor cells), 95% of detected cells had a nucleus area >2800 pixels.', 'Source: exp59LB, PBMC_nucleus_area.xlsx ']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
    Select the objects to filter:Nucleus_object
    Name the output objects:Nucleus_small_object
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:Nucleus_large_object
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:2800
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
IdentifySecondaryObjects:[module_num:21|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notes:['Cell borders are identified by enlarging the nuclei by a specified number of pixels.', 'Most CTCs have larger nuclei and Cytoplasm than PBMCs. If cell borders for small and large nuclei were drawn the same size, in situ signals of neighboring CTCs (or false positive in situ signals from unspecific background/artefacts) would be wrongfully assigned to PBMCs.', 'Therefore, we split the nucleus objects into two object sets based on their area.', '', 'Here, small nuclei are expanded by a specified number of pixels (e.g. 12 pixels (~2 µm). ', '', 'ADJUST the number of pixels by which to expand the nuclei according to your cell line and magnification.', 'Note: the input image is not used by this module, but you can use it to get an idea about the size of your cells in the preview window (select a channel with many in situ signals).', '']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
    Select the input objects:Nucleus_small_object
    Name the objects to be identified:Cell_border_small_object
    Select the method to identify the secondary objects:Distance - N
    Select the input image:atto488_raw_image
    Number of pixels by which to expand the primary objects:12
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:22|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notes:['Cell borders are identified by enlarging the nuclei by a specified number of pixels.', 'Most CTCs have larger nuclei and Cytoplasm than PBMCs. If cell borders for small and large nuclei were drawn the same size, in situ signals of neighboring CTCs (or false positive in situ signals from unspecific background/artefacts) would be wrongfully assigned to PBMCs.', 'Therefore, we split the nucleus objects into two object sets based on their area.', '', 'Here, large nuclei are expanded by a specified number of pixels (e.g. 32 pixels (~5 µm). ', '', 'ADJUST the number of pixels by which to expand the nuclei according to your cell line and magnification.', 'Note: the input image is not used by this module, but you can use it to get an idea about the size of your cells in the preview window (select a channel with many in situ signals).']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
    Select the input objects:Nucleus_large_object
    Name the objects to be identified:Cell_border_large_object
    Select the method to identify the secondary objects:Distance - N
    Select the input image:atto488_raw_image
    Number of pixels by which to expand the primary objects:32
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
CombineObjects:[module_num:23|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notes:['Cell borders are identified by enlarging the nuclei by a specified number of pixels.', 'Most CTCs have larger nuclei and Cytoplasm than PBMCs. If cell borders for small and large nuclei were drawn the same size, in situ signals of neighboring CTCs (or false positive in situ signals from unspecific background/artefacts) would be wrongfully assigned to PBMCs.', 'Therefore, we split the nucleus objects into two object sets based on their area before identifying the cell borders.', '', 'This module combines small and large cells (cell border objects) into one object set.', '', '"Segment" will combine both object sets and attempt to re-draw segmentation to separate objects which overlapped. Because the Cell border is larger for large nuclei, the segmentation is also re-drawn in favor of the large cells. This way, the in situ signals of neighboring CTCs are less likely to be assigned to PBMCs']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
    Select initial object set:Cell_border_large_object
    Select object set to combine:Cell_border_small_object
    Select how to handle overlapping objects:Segment
    Name the combined object set:Cell_border_object

EnhanceOrSuppressFeatures:[module_num:24|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notes:['This enhances the blobs/spots in the Cy5 channel. It simple makes it more bright and reduces the background.', '', 'Speckles with a feature size of 10 pixels are enhanced. This image processing tool improves the subsequent identification of RCPs using the module identify primary objects.']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
    Select the input image:cy5_sub_BG_image
    Name the output image:Enhanced_cy5
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:25|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notes:['This enhances the blobs/spots in the Cy7 channel. It simple makes it more bright and reduces the background.', '', 'Speckles with a feature size of 10 pixels are enhanced. This image processing tool improves the subsequent identification of RCPs using the module identify primary objects.']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
    Select the input image:cy7_sub_BG_image
    Name the output image:Enhanced_cy7
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:26|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notes:['This enhances the blobs/spots in the Cy3 channel. It simple makes it more bright and reduces the background.', '', 'Speckles with a feature size of 10 pixels are enhanced. This image processing tool improves the subsequent identification of RCPs using the module identify primary objects.']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
    Select the input image:cy3_sub_BG_image
    Name the output image:Enhanced_cy3
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:27|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notes:['This enhances the blobs/spots in the atto425 channel. It simple makes it more bright and reduces the background.', '', 'Speckles with a feature size of 10 pixels are enhanced. This image processing tool improves the subsequent identification of RCPs using the module identify primary objects.']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
    Select the input image:atto425_sub_BG_image
    Name the output image:Enhanced_atto425
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:28|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notes:['This enhances the blobs/spots in the atto488 channel. It simple makes it more bright and reduces the background.', '', 'Speckles with a feature size of 10 pixels are enhanced. This image processing tool improves the subsequent identification of RCPs using the module identify primary objects.']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
    Select the input image:atto488_sub_BG_image
    Name the output image:Enhanced_atto488
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:29|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notes:['This enhances the blobs/spots in the texasred channel. It simple makes it more bright and reduces the background.', '', 'Speckles with a feature size of 10 pixels are enhanced. This image processing tool improves the subsequent identification of RCPs using the module identify primary objects.']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
    Select the input image:texasred_sub_BG_image
    Name the output image:Enhanced_texasred
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:30|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notes:['This identifes the Cy5-labelled blobs/spots (after they were enchanced). ', '', 'ADJUST lower and upper bounds on threshold (and if necessary threshold correction factor and size of smoothing filter).', 'To find the best settings, go to the test mode and choose an image set with high density of Cy5 spots. ', 'Make sure that the background fluorescence between neighboring spots / the "halos" of very bright spots are not identified as objects. If necessary, increase the size of the smoothing filter and/or change the lower and upper bounds on threshold.', 'If small / low intensity spots are not identified as objects, change the lower bounds on threshold. The calculated threshold is displayed in the "display" window in the test mode. If this calculated threshold is too high, you can decrease the threshold correction factor - the calculated threshold will be closer to your lower bound on threshold.']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
    Select the input image:Enhanced_cy5
    Name the primary objects to be identified:cy5_objects
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.1
    Lower and upper bounds on threshold:0.0015,1
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    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Minimum Cross-Entropy

FindMaxima:[module_num:31|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', 'This modules FindMaxima and IdentifyPrimaryObjects are used to identify the pixel with maximum intensity in each blob/spot and shrinks the blobs/spots to a single pixel (the pixel with max intensity). ']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
    Select the input image:Enhanced_cy5
    Name the output image:cy5_maxima_image
    Minimum distance between maxima:2
    Method for excluding background:Within Objects
    Specify the minimum intensity of a peak:0.0
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    Select the objects to search within:cy5_objects

IdentifyPrimaryObjects:[module_num:32|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', 'This modules FindMaxima and IdentifyPrimaryObjects are used to identify the pixel with maximum intensity in each blob/spot and shrinks the blobs/spots to a single pixel (the pixel with max intensity). ']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
    Select the input image:cy5_maxima_image
    Name the primary objects to be identified:cy5_center
    Typical diameter of objects, in pixel units (Min,Max):1,3
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.9
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
ExpandOrShrinkObjects:[module_num:33|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', ' All blobs/spots were shrunk to a single pixel.', '', 'This module expands them by a specified number of pixels (1-2).']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
    Select the input objects:cy5_center
    Name the output objects:small_cy5_objects
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
IdentifyPrimaryObjects:[module_num:34|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notes:['This identifes the Cy7-labelled blobs/spots (after they were enchanced). ', '', 'ADJUST lower and upper bounds on threshold (and if necessary threshold correction factor and size of smoothing filter).', 'To find the best settings, go to the test mode and choose an image set with high density of Cy7 spots. ', 'Make sure that the background fluorescence between neighboring spots / the "halos" of very bright spots are not identified as objects. If necessary, increase the size of the smoothing filter and/or change the lower and upper bounds on threshold.', 'If small / low intensity spots are not identified as objects, change the lower bounds on threshold. The calculated threshold is displayed in the "display" window in the test mode. If this calculated threshold is too high, you can decrease the threshold correction factor - the calculated threshold will be closer to your lower bound on threshold.']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
    Select the input image:Enhanced_cy7
    Name the primary objects to be identified:cy7_objects
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.1
    Lower and upper bounds on threshold:0.001,1
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    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Minimum Cross-Entropy

FindMaxima:[module_num:35|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', 'This modules FindMaxima and IdentifyPrimaryObjects are used to identify the pixel with maximum intensity in each blob/spot and shrinks the blobs/spots to a single pixel (the pixel with max intensity). ']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
    Select the input image:Enhanced_cy7
    Name the output image:cy7_maxima_image
    Minimum distance between maxima:2
    Method for excluding background:Within Objects
    Specify the minimum intensity of a peak:0.0
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    Select the objects to search within:cy7_objects

IdentifyPrimaryObjects:[module_num:36|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', 'This modules FindMaxima and IdentifyPrimaryObjects are used to identify the pixel with maximum intensity in each blob/spot and shrinks the blobs/spots to a single pixel (the pixel with max intensity). ']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
    Select the input image:cy7_maxima_image
    Name the primary objects to be identified:cy7_center
    Typical diameter of objects, in pixel units (Min,Max):1,3
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.9
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
ExpandOrShrinkObjects:[module_num:37|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', ' All blobs/spots were shrunk to a single pixel.', '', 'This module expands them by a specified number of pixels (1-2).']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
    Select the input objects:cy7_center
    Name the output objects:small_cy7_objects
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
IdentifyPrimaryObjects:[module_num:38|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notes:['This identifes the Cy3-labelled blobs/spots (after they were enchanced). ', '', 'ADJUST lower and upper bounds on threshold (and if necessary threshold correction factor and size of smoothing filter).', 'To find the best settings, go to the test mode and choose an image set with high density of Cy3 spots. ', 'Make sure that the background fluorescence between neighboring spots / the "halos" of very bright spots are not identified as objects. If necessary, increase the size of the smoothing filter and/or change the lower and upper bounds on threshold.', 'If small / low intensity spots are not identified as objects, change the lower bounds on threshold. The calculated threshold is displayed in the "display" window in the test mode. If this calculated threshold is too high, you can decrease the threshold correction factor - the calculated threshold will be closer to your lower bound on threshold.']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
    Select the input image:Enhanced_cy3
    Name the primary objects to be identified:cy3_objects
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.1
    Lower and upper bounds on threshold:0.0008,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Minimum Cross-Entropy

FindMaxima:[module_num:39|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', 'This modules FindMaxima and IdentifyPrimaryObjects are used to identify the pixel with maximum intensity in each blob/spot and shrinks the blobs/spots to a single pixel (the pixel with max intensity). ']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
    Select the input image:Enhanced_cy3
    Name the output image:cy3_maxima_image
    Minimum distance between maxima:2
    Method for excluding background:Within Objects
    Specify the minimum intensity of a peak:0.0
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    Select the objects to search within:cy3_objects

IdentifyPrimaryObjects:[module_num:40|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', 'This modules FindMaxima and IdentifyPrimaryObjects are used to identify the pixel with maximum intensity in each blob/spot and shrinks the blobs/spots to a single pixel (the pixel with max intensity). ']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
    Select the input image:cy3_maxima_image
    Name the primary objects to be identified:cy3_center
    Typical diameter of objects, in pixel units (Min,Max):1,3
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.9
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
ExpandOrShrinkObjects:[module_num:41|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', ' All blobs/spots were shrunk to a single pixel.', '', 'This module expands them by a specified number of pixels (1-2).']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
    Select the input objects:cy3_center
    Name the output objects:small_cy3_objects
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
IdentifyPrimaryObjects:[module_num:42|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notes:['This identifes the atto425-labelled blobs/spots (after they were enchanced). ', '', 'ADJUST lower and upper bounds on threshold (and if necessary threshold correction factor and size of smoothing filter).', 'To find the best settings, go to the test mode and choose an image set with high density of atto425 spots. ', 'Make sure that the background fluorescence between neighboring spots / the "halos" of very bright spots are not identified as objects. If necessary, increase the size of the smoothing filter and/or change the lower and upper bounds on threshold.', 'If small / low intensity spots are not identified as objects, change the lower bounds on threshold. The calculated threshold is displayed in the "display" window in the test mode. If this calculated threshold is too high, you can decrease the threshold correction factor - the calculated threshold will be closer to your lower bound on threshold.']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
    Select the input image:Enhanced_atto425
    Name the primary objects to be identified:atto425_objects
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.3
    Lower and upper bounds on threshold:0.001,1
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    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Minimum Cross-Entropy

FindMaxima:[module_num:43|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', 'This modules FindMaxima and IdentifyPrimaryObjects are used to identify the pixel with maximum intensity in each blob/spot and shrinks the blobs/spots to a single pixel (the pixel with max intensity). ']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
    Select the input image:Enhanced_atto425
    Name the output image:atto425_maxima_image
    Minimum distance between maxima:2
    Method for excluding background:Within Objects
    Specify the minimum intensity of a peak:0.0
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    Select the objects to search within:atto425_objects

IdentifyPrimaryObjects:[module_num:44|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', 'This modules FindMaxima and IdentifyPrimaryObjects are used to identify the pixel with maximum intensity in each blob/spot and shrinks the blobs/spots to a single pixel (the pixel with max intensity). ']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
    Select the input image:atto425_maxima_image
    Name the primary objects to be identified:atto425_center
    Typical diameter of objects, in pixel units (Min,Max):1,3
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.9
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
ExpandOrShrinkObjects:[module_num:45|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', ' All blobs/spots were shrunk to a single pixel.', '', 'This module expands them by a specified number of pixels (1-2).']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
    Select the input objects:atto425_center
    Name the output objects:small_atto425_objects
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
IdentifyPrimaryObjects:[module_num:46|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notes:['This identifes the atto488-labelled blobs/spots (after they were enchanced). ', '', 'ADJUST lower and upper bounds on threshold (and if necessary threshold correction factor and size of smoothing filter).', 'To find the best settings, go to the test mode and choose an image set with high density of atto488 spots. ', 'Make sure that the background fluorescence between neighboring spots / the "halos" of very bright spots are not identified as objects. If necessary, increase the size of the smoothing filter and/or change the lower and upper bounds on threshold.', 'If small / low intensity spots are not identified as objects, change the lower bounds on threshold. The calculated threshold is displayed in the "display" window in the test mode. If this calculated threshold is too high, you can decrease the threshold correction factor - the calculated threshold will be closer to your lower bound on threshold.']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
    Select the input image:Enhanced_atto488
    Name the primary objects to be identified:atto488_objects
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.3
    Lower and upper bounds on threshold:0.0008,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Minimum Cross-Entropy

FindMaxima:[module_num:47|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', 'This modules FindMaxima and IdentifyPrimaryObjects are used to identify the pixel with maximum intensity in each blob/spot and shrinks the blobs/spots to a single pixel (the pixel with max intensity). ']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
    Select the input image:Enhanced_atto488
    Name the output image:atto488_maxima_image
    Minimum distance between maxima:2
    Method for excluding background:Within Objects
    Specify the minimum intensity of a peak:0.0
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    Select the objects to search within:atto488_objects

IdentifyPrimaryObjects:[module_num:48|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', 'This modules FindMaxima and IdentifyPrimaryObjects are used to identify the pixel with maximum intensity in each blob/spot and shrinks the blobs/spots to a single pixel (the pixel with max intensity). ']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
    Select the input image:atto488_maxima_image
    Name the primary objects to be identified:atto488_center
    Typical diameter of objects, in pixel units (Min,Max):1,3
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.9
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
ExpandOrShrinkObjects:[module_num:49|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', ' All blobs/spots were shrunk to a single pixel.', '', 'This module expands them by a specified number of pixels (1-2).']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
    Select the input objects:atto488_center
    Name the output objects:small_atto488_objects
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
IdentifyPrimaryObjects:[module_num:50|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notes:['This identifes the texasred-labelled blobs/spots (after they were enchanced). ', '', 'ADJUST lower and upper bounds on threshold (and if necessary threshold correction factor and size of smoothing filter).', 'To find the best settings, go to the test mode and choose an image set with high density of texasred spots. ', 'Make sure that the background fluorescence between neighboring spots / the "halos" of very bright spots are not identified as objects. If necessary, increase the size of the smoothing filter and/or change the lower and upper bounds on threshold.', 'If small / low intensity spots are not identified as objects, change the lower bounds on threshold. The calculated threshold is displayed in the "display" window in the test mode. If this calculated threshold is too high, you can decrease the threshold correction factor - the calculated threshold will be closer to your lower bound on threshold.']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
    Select the input image:Enhanced_texasred
    Name the primary objects to be identified:TR_objects
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.2
    Lower and upper bounds on threshold:0.0008,1
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    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Minimum Cross-Entropy

FindMaxima:[module_num:51|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', 'This modules FindMaxima and IdentifyPrimaryObjects are used to identify the pixel with maximum intensity in each blob/spot and shrinks the blobs/spots to a single pixel (the pixel with max intensity). ']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
    Select the input image:Enhanced_texasred
    Name the output image:texasred_maxima_image
    Minimum distance between maxima:2
    Method for excluding background:Within Objects
    Specify the minimum intensity of a peak:0.0
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    Select the objects to search within:TR_objects

IdentifyPrimaryObjects:[module_num:52|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', 'This modules FindMaxima and IdentifyPrimaryObjects are used to identify the pixel with maximum intensity in each blob/spot and shrinks the blobs/spots to a single pixel (the pixel with max intensity). ']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
    Select the input image:texasred_maxima_image
    Name the primary objects to be identified:TR_center
    Typical diameter of objects, in pixel units (Min,Max):1,3
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.9
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
ExpandOrShrinkObjects:[module_num:53|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notes:['The size of identified blobs/spots can be very heterogenous based on their intensity. For downstream analysis, all blobs/spots of a channel should have the same size.', '', ' All blobs/spots were shrunk to a single pixel.', '', 'This module expands them by a specified number of pixels (1-2).']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
    Select the input objects:TR_center
    Name the output objects:small_TR_objects
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
MaskObjects:[module_num:54|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notes:['There is some crosstalk between cy5 and TR (Cy5 signals visible in TR channel).', 'This module removes all TR signals overlapping with Cy5 signals.']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
    Select objects to be masked:small_TR_objects
    Name the masked objects:cy5_masked_TR_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:small_cy5_objects
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

EnhanceOrSuppressFeatures:[module_num:55|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notes:['High autofluorescence is often observed at the cell borders, especially in cell clumps. This is observed in all channels except cy7. ', 'In the cy5 and texasred background scan, the high autofluorescence objects can be distinguished from the background/autofluorescence of the cytoplasm.', '', 'This module enhances the cy5 background image.']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
    Select the input image:cy5_BG_image
    Name the output image:enhanced_cy5_BG_image
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:56|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notes:['High autofluorescence is often observed at the cell borders, especially in cell clumps. This is observed in all channels except cy7. ', 'In the cy5 and texasred background scan, the high autofluorescence objects can be distinguished from the background/autofluorescence of the cytoplasm.', '', 'This module identifies the cy5 high autofluorescence objects in the enhanced background image.', '', 'ADJUST the lower bounds on threshold.']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
    Select the input image:enhanced_cy5_BG_image
    Name the primary objects to be identified:high_autofluorescence_cy5_objects
    Typical diameter of objects, in pixel units (Min,Max):7,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.05
    Lower and upper bounds on threshold:0.001,1.0
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    Log transform before thresholding?:No
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
EnhanceOrSuppressFeatures:[module_num:57|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notes:['High autofluorescence is often observed at the cell borders, especially in cell clumps. This is observed in all channels except cy7. ', 'In the cy5 and texasred background scan, the high autofluorescence objects can be distinguished from the background/autofluorescence of the cytoplasm.', '', 'This module enhances the texasred background image.']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
    Select the input image:texasred_BG_image
    Name the output image:enhanced_texasred_BG_image
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:58|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notes:['High autofluorescence is often observed at the cell borders, especially in cell clumps. This is observed in all channels except cy7. ', 'In the cy5 and texasred background scan, the high autofluorescence objects can be distinguished from the background/autofluorescence of the cytoplasm.', '', 'This module identifies the texasred high autofluorescence objects in the enhanced background image.', '', 'ADJUST the lower bounds on threshold.']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
    Select the input image:enhanced_texasred_BG_image
    Name the primary objects to be identified:high_autofluorescence_texasred_objects
    Typical diameter of objects, in pixel units (Min,Max):7,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.2
    Lower and upper bounds on threshold:0.0009,1.0
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    Log transform before thresholding?:No
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
MaskObjects:[module_num:59|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notes:['High autofluorescence is often observed at the cell borders, especially in cell clumps. This is observed in all channels except cy7. ', 'In the cy5 and texasred background scan, the high autofluorescence objects can be distinguished from the background/autofluorescence of the cytoplasm.', '', 'This module excludes all high autofluorescence objects, that are visible in only one of the two channels (cy5 & texasred).']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
    Select objects to be masked:high_autofluorescence_cy5_objects
    Name the masked objects:high_autofluorescence_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:high_autofluorescence_texasred_objects
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:60|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notes:['Some blobs/spots are visible all (or many) channels. These are no true in situ signals but unspecific signals', '', 'This module converts the detected blobs into a binary image.']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
    Select the input objects:atto425_objects
    Name the output image:atto425_objects_image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:61|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notes:['Some blobs/spots are visible all (or many) channels. These are no true in situ signals but unspecific signals', '', 'This module converts the detected blobs into a binary image.']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
    Select the input objects:atto488_objects
    Name the output image:atto488_objects_image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:62|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notes:['Some blobs/spots are visible all (or many) channels. These are no true in situ signals but unspecific signals', '', 'This module converts the detected blobs into a binary image.']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
    Select the input objects:cy3_objects
    Name the output image:cy3_objects_image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:63|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notes:['Some blobs/spots are visible all (or many) channels. These are no true in situ signals but unspecific signals', '', 'This module converts the detected blobs into a binary image.']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
    Select the input objects:TR_objects
    Name the output image:TR_objects_image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:64|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notes:['Some blobs/spots are visible all (or many) channels. These are no true in situ signals but unspecific signals', '', 'This module converts the detected blobs into a binary image.']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
    Select the input objects:cy5_objects
    Name the output image:cy5_objects_image
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:65|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notes:['Some blobs/spots are visible all (or many) channels. These are no true in situ signals but unspecific signals', '', 'This module converts the detected blobs into a binary image.']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
    Select the input objects:cy7_objects
    Name the output image:cy7_objects_image
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:66|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notes:['Some blobs/spots are visible all (or many) channels. These are no true in situ signals but unspecific signals.', '', 'the binary images of blobs of all channels (intensity 0.1) are combined (by addition) in one image.', 'blobs visible in 2 channels -> intensity 0.2', 'blobs visible in 3 channels -> intensity 0.3', 'etc.', '', 'in the next module, this image can be used to identify blobs that are visible in >4 channels as unspecific blobs.']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:combined_blobs_image
    Image or measurement?:Image
    Select the first image:atto425_objects_image
    Multiply the first image by:0.1
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    Image or measurement?:Image
    Select the second image:atto488_objects_image
    Multiply the second image by:0.1
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    Image or measurement?:Image
    Select the third image:cy3_objects_image
    Multiply the third image by:0.1
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    Image or measurement?:Image
    Select the fourth image:TR_objects_image
    Multiply the fourth image by:0.1
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    Image or measurement?:Image
    Select the fifth image:cy5_objects_image
    Multiply the fifth image by:0.1
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    Image or measurement?:Image
    Select the sixth image:cy7_objects_image
    Multiply the sixth image by:0.1
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
IdentifyPrimaryObjects:[module_num:67|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notes:['Some blobs/spots are visible all (or many) channels. These are no true in situ signals but unspecific signals.', 'The binary images of blobs of all channels (intensity 0.1) were combined (by addition) in one image.', 'blobs visible in 2 channels -> intensity 0.2', 'blobs visible in 3 channels -> intensity 0.3', 'etc.', '', 'In this module, this combined image can be used to identify blobs that are visible in >4 channels as unspecific blobs.']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
    Select the input image:combined_blobs_image
    Name the primary objects to be identified:unspecific_blob_object
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.4
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
Threshold:[module_num:68|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notes:['original scan and BG scan were aligned after cropping (using python).', 'As a result, some BG images contain "empty" areas. This can create artefacts during BG subtraction.', 'Therefore, the "empty" BG areas are identified as objects, using the "threshold" and "ConvertImageToObjects" modules', '', 'The resulting object can be used for masking.']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
    Select the input image:atto425_BG_image
    Name the output image:BG_empty_area
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.000000001
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
ConvertImageToObjects:[module_num:69|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notes:['original scan and BG scan were aligned after cropping (using python).', 'As a result, some BG images contain "empty" areas. This can create artefacts during BG subtraction.', 'Therefore, the "empty" BG areas are identified as objects, using the "threshold" and "ConvertImageToObjects" modules', '', 'The resulting object can be used for masking.']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
    Select the input image:BG_empty_area
    Name the output object:BG_empty_object
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:1
    Connectivity:0

CombineObjects:[module_num:70|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notes:['This module combines high autofluorescence objects (identified from high texasred and cy5 BG) and empty areas in the BG images to be used as mask.']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
    Select initial object set:high_autofluorescence_objects
    Select object set to combine:BG_empty_object
    Select how to handle overlapping objects:Merge
    Name the combined object set:high_autofluorescence_and_BG_empty_objects

CombineObjects:[module_num:71|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notes:['This module combines high autofluorescence objects (identified from high texasred and cy5 BG), empty areas in the BG images, and unspecific blob objects (visible in >4 channels) to be used as mask.']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
    Select initial object set:high_autofluorescence_and_BG_empty_objects
    Select object set to combine:unspecific_blob_object
    Select how to handle overlapping objects:Merge
    Name the combined object set:high_autofluorescence_and_unspecific_objects

MaskObjects:[module_num:72|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notes:['High autofluorescence objects (identified from high texasred and cy5 BG) and unspecific blob objects (visible in >4 channels) were combined.', '', 'This module uses the combined objects as mask to exclude in situ signals present in >4 channels or in areas of high autofluorescence.']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
    Select objects to be masked:unspecific_blob_object
    Name the masked objects:masked_unspecific_blob_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:high_autofluorescence_and_unspecific_objects
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:73|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notes:['High autofluorescence objects (identified from high texasred and cy5 BG) and unspecific blob objects (visible in >4 channels) were combined.', '', 'This module uses the combined objects as mask to exclude in situ signals present in >4 channels or in areas of high autofluorescence.']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
    Select objects to be masked:small_atto425_objects
    Name the masked objects:masked_small_atto425_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:high_autofluorescence_and_unspecific_objects
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:74|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notes:['High autofluorescence objects (identified from high texasred and cy5 BG) and unspecific blob objects (visible in >4 channels) were combined.', '', 'This module uses the combined objects as mask to exclude in situ signals present in >4 channels or in areas of high autofluorescence.']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
    Select objects to be masked:small_atto488_objects
    Name the masked objects:masked_small_atto488_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:high_autofluorescence_and_unspecific_objects
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:75|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notes:['High autofluorescence objects (identified from high texasred and cy5 BG) and unspecific blob objects (visible in >4 channels) were combined.', '', 'This module uses the combined objects as mask to exclude in situ signals present in >4 channels or in areas of high autofluorescence.']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
    Select objects to be masked:small_cy3_objects
    Name the masked objects:masked_small_cy3_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:high_autofluorescence_and_unspecific_objects
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:76|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notes:['High autofluorescence objects (identified from high texasred and cy5 BG) and unspecific blob objects (visible in >4 channels) were combined.', '', 'This module uses the combined objects as mask to exclude in situ signals present in >4 channels or in areas of high autofluorescence.']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
    Select objects to be masked:cy5_masked_TR_objects
    Name the masked objects:masked_small_TR_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:high_autofluorescence_and_unspecific_objects
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:77|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notes:['High autofluorescence objects (identified from high texasred and cy5 BG) and unspecific blob objects (visible in >4 channels) were combined.', '', 'This module uses the combined objects as mask to exclude in situ signals present in >4 channels or in areas of high autofluorescence.']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
    Select objects to be masked:small_cy5_objects
    Name the masked objects:masked_small_cy5_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:high_autofluorescence_and_unspecific_objects
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ExpandOrShrinkObjects:[module_num:78|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notes:['This module shrinks the cy5 spots by 1 pixel.', '', '(When relating cy5 spots to atto425, atto488, and cy3, larger spots are used because of pixel shift between the channels. When relating cy5 spots to cy7, the smaller spots are used because there is no pixel shift between the channels.)']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
    Select the input objects:masked_small_cy5_objects
    Name the output objects:masked_small_1px_cy5_objects
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No
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
MaskObjects:[module_num:79|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notes:['High autofluorescence objects (identified from high texasred and cy5 BG) and unspecific blob objects (visible in >4 channels) were combined.', '', 'This module uses the combined objects as mask to exclude in situ signals present in >4 channels or in areas of high autofluorescence.']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
    Select objects to be masked:small_cy7_objects
    Name the masked objects:masked_small_cy7_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:high_autofluorescence_and_unspecific_objects
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ExpandOrShrinkObjects:[module_num:80|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notes:['This module shrinks the cy7 spots by 1 pixel.', '', '(When relating cy7 spots to atto425, atto488, and cy3, larger spots are used because of pixel shift between the channels. When relating cy7 spots to cy5, the smaller spots are used because there is no pixel shift between the channels.)']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
    Select the input objects:masked_small_cy7_objects
    Name the output objects:masked_small_1px_cy7_objects
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No
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
RelateObjects:[module_num:81|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notes:['Decoding dual-color in situ signals: this module identifies double positive in situ signals for the respective dual-color combinations.']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
    Parent objects:masked_small_cy5_objects
    Child objects:masked_small_atto425_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:cy5_atto425_objects
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
RelateObjects:[module_num:82|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notes:['Decoding dual-color in situ signals: this module identifies double positive in situ signals for the respective dual-color combinations.']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
    Parent objects:masked_small_cy5_objects
    Child objects:masked_small_atto488_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:cy5_atto488_objects
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
RelateObjects:[module_num:83|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notes:['Decoding dual-color in situ signals: this module identifies double positive in situ signals for the respective dual-color combinations.']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
    Parent objects:masked_small_cy5_objects
    Child objects:masked_small_cy3_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:cy5_cy3_objects
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
RelateObjects:[module_num:84|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notes:['Decoding dual-color in situ signals: this module identifies double positive in situ signals for the respective dual-color combinations.']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
    Parent objects:masked_small_cy7_objects
    Child objects:masked_small_atto425_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:cy7_atto425_objects
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
RelateObjects:[module_num:85|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notes:['Decoding dual-color in situ signals: this module identifies double positive in situ signals for the respective dual-color combinations.']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
    Parent objects:masked_small_cy7_objects
    Child objects:masked_small_atto488_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:cy7_atto488_objects
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
RelateObjects:[module_num:86|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notes:['Decoding dual-color in situ signals: this module identifies double positive in situ signals for the respective dual-color combinations.']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
    Parent objects:masked_small_cy7_objects
    Child objects:masked_small_cy3_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:cy7_cy3_objects
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
RelateObjects:[module_num:87|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notes:['Decoding dual-color in situ signals: this module identifies double positive in situ signals for the respective dual-color combinations.']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
    Parent objects:masked_small_TR_objects
    Child objects:masked_small_cy3_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:TR_cy3_objects
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
RelateObjects:[module_num:88|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notes:['Decoding dual-color in situ signals: this module identifies double positive in situ signals for the respective dual-color combinations.']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
    Parent objects:masked_small_cy3_objects
    Child objects:masked_small_atto488_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:atto488_cy3_objects
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
RelateObjects:[module_num:89|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notes:['Decoding dual-color in situ signals: this module identifies double positive in situ signals for the respective dual-color combinations.']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
    Parent objects:masked_small_cy3_objects
    Child objects:masked_small_atto425_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:atto425_cy3_objects
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
RelateObjects:[module_num:90|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notes:['Decoding dual-color in situ signals: this module identifies double positive in situ signals for the respective dual-color combinations.']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
    Parent objects:masked_small_atto488_objects
    Child objects:masked_small_atto425_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:atto425_atto488_objects
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
RelateObjects:[module_num:91|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notes:['Decoding dual-color in situ signals: this module identifies double positive in situ signals for the respective dual-color combinations.', '', 'small_1px_cy5 and cy7 are used (no xy-pixel-shift between cy5 and cy7 expected)']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
    Parent objects:masked_small_1px_cy5_objects
    Child objects:masked_small_1px_cy7_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:cy5_cy7_object
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
CombineObjects:[module_num:92|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notes:['Highly expressed genes can lead to overcrowding in cells. Overlapping signals can lead to false positives ', 'e.g. overlapping KRT (cy5+atto425) and VIM (atto488+cy3) produces false positive AR-FL (cy5+atto488)', 'To avoid this, highly expressed genes can be used to mask genes with lower expression.', '', 'This module combines in situ signals of high expressed genes:', 'KRT (cy5+atto425) and VIM (atto488+cy3)']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
    Select initial object set:cy5_atto425_objects
    Select object set to combine:atto488_cy3_objects
    Select how to handle overlapping objects:Merge
    Name the combined object set:combined_01

CombineObjects:[module_num:93|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notes:['Highly expressed genes can lead to overcrowding in cells. Overlapping signals can lead to false positives ', 'e.g. overlapping KRT (cy5+atto425) and VIM (atto488+cy3) produces false positive AR-FL (cy5+atto488)', 'To avoid this, highly expressed genes can be used to mask genes with lower expression.', '', 'This module combines in situ signals of high expressed genes:', 'KRT (cy5+atto425) and VIM (atto488+cy3) and KLK3 (cy7+atto425)']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
    Select initial object set:combined_01
    Select object set to combine:cy7_atto425_objects
    Select how to handle overlapping objects:Merge
    Name the combined object set:combined_02

CombineObjects:[module_num:94|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notes:['Highly expressed genes can lead to overcrowding in cells. Overlapping signals can lead to false positives ', 'e.g. overlapping KRT (cy5+atto425) and VIM (atto488+cy3) produces false positive AR-FL (cy5+atto488)', 'To avoid this, highly expressed genes can be used to mask genes with lower expression.', '', 'This module combines in situ signals of high expressed genes:', 'KRT (cy5+atto425) and VIM (atto488+cy3) and KLK3 (cy7+atto425) and AR-FL (cy5+atto488)']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
    Select initial object set:combined_02
    Select object set to combine:cy5_atto488_objects
    Select how to handle overlapping objects:Merge
    Name the combined object set:combined_03

CombineObjects:[module_num:95|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notes:['Highly expressed genes can lead to overcrowding in cells. Overlapping signals can lead to false positives ', 'e.g. overlapping KRT (cy5+atto425) and VIM (atto488+cy3) produces false positive AR-FL (cy5+atto488)', 'To avoid this, highly expressed genes can be used to mask genes with lower expression.', '', 'This module combines in situ signals of high expressed genes:', 'KRT (cy5+atto425) and VIM (atto488+cy3) and KLK3 (cy7+atto425) and AR-FL (cy5+atto488) + (...)']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
    Select initial object set:combined_03
    Select object set to combine:cy7_atto488_objects
    Select how to handle overlapping objects:Merge
    Name the combined object set:combined_04

CombineObjects:[module_num:96|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notes:['Highly expressed genes can lead to overcrowding in cells. Overlapping signals can lead to false positives ', 'e.g. overlapping KRT (cy5+atto425) and VIM (atto488+cy3) produces false positive AR-FL (cy5+atto488)', 'To avoid this, highly expressed genes can be used to mask genes with lower expression.', '', 'This module combines in situ signals of high expressed genes:', 'KRT (cy5+atto425) and VIM (atto488+cy3) and KLK3 (cy7+atto425) and AR-FL (cy5+atto488) + (...)']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
    Select initial object set:combined_04
    Select object set to combine:cy7_cy3_objects
    Select how to handle overlapping objects:Merge
    Name the combined object set:combined_05

CombineObjects:[module_num:97|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notes:['Highly expressed genes can lead to overcrowding in cells. Overlapping signals can lead to false positives ', 'e.g. overlapping KRT (cy5+atto425) and VIM (atto488+cy3) produces false positive AR-FL (cy5+atto488)', 'To avoid this, highly expressed genes can be used to mask genes with lower expression.', '', 'This module combines in situ signals of high expressed genes:', 'KRT (cy5+atto425) and VIM (atto488+cy3) and KLK3 (cy7+atto425) and AR-FL (cy5+atto488) + (...)']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
    Select initial object set:combined_05
    Select object set to combine:cy5_cy3_objects
    Select how to handle overlapping objects:Merge
    Name the combined object set:combined_06

CombineObjects:[module_num:98|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notes:['Highly expressed genes can lead to overcrowding in cells. Overlapping signals can lead to false positives ', 'e.g. overlapping KRT (cy5+atto425) and VIM (atto488+cy3) produces false positive AR-FL (cy5+atto488)', 'To avoid this, highly expressed genes can be used to mask genes with lower expression.', '', 'This module combines in situ signals of high expressed genes:', 'KRT (cy5+atto425) and VIM (atto488+cy3) and KLK3 (cy7+atto425) and AR-FL (cy5+atto488) + (...)']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
    Select initial object set:combined_06
    Select object set to combine:TR_cy3_objects
    Select how to handle overlapping objects:Merge
    Name the combined object set:combined_07

MaskObjects:[module_num:99|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notes:['Highly expressed genes can lead to overcrowding in cells. Overlapping signals can lead to false positives ', 'e.g. overlapping KRT (cy5+atto425) and VIM (atto488+cy3) produces false positive AR-FL (cy5+atto488)', 'To avoid this, highly expressed genes can be used to mask genes with lower expression.', '', 'This module masks AR-FL (cy5+atto488) signals by highly expressed genes:', 'KRT (cy5+atto425) and VIM (atto488+cy3)']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
    Select objects to be masked:cy5_atto488_objects
    Name the masked objects:masked_cy5_atto488_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:combined_01
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:100|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notes:['Highly expressed genes can lead to overcrowding in cells. Overlapping signals can lead to false positives ', 'e.g. overlapping KRT (cy5+atto425) and VIM (atto488+cy3) produces false positive AR-FL (cy5+atto488)', 'To avoid this, highly expressed genes can be used to mask genes with lower expression.', '', 'This module masks EPCAM (cy7+atto488) signals by highly expressed genes:', 'KRT (cy5+atto425) and VIM (atto488+cy3) and KLK3 (cy7+atto425) and AR-FL (cy5+atto488)']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
    Select objects to be masked:cy7_atto488_objects
    Name the masked objects:masked_cy7_atto488_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:combined_03
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:101|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notes:['Highly expressed genes can lead to overcrowding in cells. Overlapping signals can lead to false positives ', 'e.g. overlapping KRT (cy5+atto425) and VIM (atto488+cy3) produces false positive AR-FL (cy5+atto488)', 'To avoid this, highly expressed genes can be used to mask genes with lower expression.', '', 'This module masks AR-V7 (cy7+cy3) signals by highly expressed genes:', 'KRT (cy5+atto425) and VIM (atto488+cy3) and KLK3 (cy7+atto425) and AR-FL (cy5+atto488)']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
    Select objects to be masked:cy7_cy3_objects
    Name the masked objects:masked_cy7_cy3_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:combined_03
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:102|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notes:['Highly expressed genes can lead to overcrowding in cells. Overlapping signals can lead to false positives ', 'e.g. overlapping KRT (cy5+atto425) and VIM (atto488+cy3) produces false positive AR-FL (cy5+atto488)', 'To avoid this, highly expressed genes can be used to mask genes with lower expression.', '', 'This module masks FOLH1 (cy5+cy3) signals by highly expressed genes:', 'KRT (cy5+atto425) and VIM (atto488+cy3) and KLK3 (cy7+atto425) and AR-FL (cy5+atto488)']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
    Select objects to be masked:cy5_cy3_objects
    Name the masked objects:masked_cy5_cy3_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:combined_03
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:103|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notes:['Highly expressed genes can lead to overcrowding in cells. Overlapping signals can lead to false positives ', 'e.g. overlapping KRT (cy5+atto425) and VIM (atto488+cy3) produces false positive AR-FL (cy5+atto488)', 'To avoid this, highly expressed genes can be used to mask genes with lower expression.', '', 'This module masks NE (cy5+cy7) signals by highly expressed genes:', 'KRT (cy5+atto425) and VIM (atto488+cy3) and KLK3 (cy7+atto425) and AR-FL (cy5+atto488) + (...)']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
    Select objects to be masked:cy5_cy7_object
    Name the masked objects:masked_cy5_cy7_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:combined_07
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:1
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:104|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notes:['Highly expressed genes can lead to overcrowding in cells. Overlapping signals can lead to false positives ', 'e.g. overlapping KRT (cy5+atto425) and VIM (atto488+cy3) produces false positive AR-FL (cy5+atto488)', 'To avoid this, highly expressed genes can be used to mask genes with lower expression.', '', 'This module masks DLL3 (atto425+cy3) signals by highly expressed genes:', 'KRT (cy5+atto425) and VIM (atto488+cy3) and KLK3 (cy7+atto425) and AR-FL (cy5+atto488) + (...)']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
    Select objects to be masked:atto425_cy3_objects
    Name the masked objects:masked_atto425_cy3_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:combined_07
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:105|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notes:['Highly expressed genes can lead to overcrowding in cells. Overlapping signals can lead to false positives ', 'e.g. overlapping KRT (cy5+atto425) and VIM (atto488+cy3) produces false positive AR-FL (cy5+atto488)', 'To avoid this, highly expressed genes can be used to mask genes with lower expression.', '', 'This module masks SLFN11 (atto425+atto488) signals by highly expressed genes:', 'KRT (cy5+atto425) and VIM (atto488+cy3) and KLK3 (cy7+atto425) and AR-FL (cy5+atto488) + (...)']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
    Select objects to be masked:atto425_atto488_objects
    Name the masked objects:masked_atto425_atto488_objects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:combined_07
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

RelateObjects:[module_num:106|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:masked_small_cy5_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_cy5_objects
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
RelateObjects:[module_num:107|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:masked_small_cy7_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_cy7_objects
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
RelateObjects:[module_num:108|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:masked_small_TR_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_TR_objects
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
RelateObjects:[module_num:109|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:masked_small_atto425_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_atto425_objects
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
RelateObjects:[module_num:110|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:masked_small_atto488_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_atto488_objects
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
RelateObjects:[module_num:111|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:masked_small_cy3_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_cy3_objects
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
RelateObjects:[module_num:112|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:cy5_atto425_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_cy5_atto425_objects
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
RelateObjects:[module_num:113|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:masked_cy5_atto488_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_cy5_atto488_objects
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
RelateObjects:[module_num:114|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:masked_cy5_cy3_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_cy5_cy3_objects
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
RelateObjects:[module_num:115|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:cy7_atto425_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_cy7_atto425_objects
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
RelateObjects:[module_num:116|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:masked_cy7_atto488_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_cy7_atto488_objects
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
RelateObjects:[module_num:117|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:masked_cy7_cy3_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_cy7_cy3_objects
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
RelateObjects:[module_num:118|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:TR_cy3_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_TR_cy3_objects
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
RelateObjects:[module_num:119|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:atto488_cy3_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_atto488_cy3_objects
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
RelateObjects:[module_num:120|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:masked_atto425_atto488_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_atto425_atto488_objects
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
RelateObjects:[module_num:121|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:masked_atto425_cy3_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_atto425_cy3_objects
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
RelateObjects:[module_num:122|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.']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
    Parent objects:Cell_border_object
    Child objects:masked_cy5_cy7_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_cy5_cy7_objects
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
RelateObjects:[module_num:123|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notes:['This modules establishes a parent-child between the blobs ("children") and the cells ("parents") in order to determine which blob belong to which cell. Each blob is assigned to its "parent" cell and the number of blobs per cell is counted.', '', '(unspecific objects present in >4 channels)']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
    Parent objects:Cell_border_object
    Child objects:masked_unspecific_blob_objects
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:related_unspecific_objects
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
OverlayOutlines:[module_num:124|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notes:['Visualization of results: show object outlines of nuclei, cell borders ("parents"), and decoded in situ signals on the enhanced DAPI image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Nucleus_enhanced_image
    Name the output image:Overlay_decoded
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:grey
    Select objects to display:Nucleus_object
    Select outline color:#A4A4A4
    Select objects to display:Cell_border_object
    Select outline color:red
    Select objects to display:related_cy5_atto425_objects
    Select outline color:#FFAF37
    Select objects to display:related_cy5_atto488_objects
    Select outline color:cyan
    Select objects to display:related_cy7_atto425_objects
    Select outline color:#008080
    Select objects to display:related_atto488_cy3_objects
    Select outline color:green
    Select objects to display:related_cy7_atto488_objects
    Select outline color:magenta
    Select objects to display:related_cy7_cy3_objects
    Select outline color:yellow
    Select objects to display:related_cy5_cy3_objects
    Select outline color:blue
    Select objects to display:related_TR_cy3_objects
    Select outline color:white
    Select objects to display:related_cy5_cy7_objects
    Select outline color:#FF8080
    Select objects to display:related_atto425_atto488_objects
    Select outline color:#A400A4
    Select objects to display:related_atto425_cy3_objects

MeasureObjectSizeShape:[module_num:125|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notes:['Measure size and shape of cells']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
    Select object sets to measure:Cell_border_object
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:126|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notes:['Measure intensity of nuclei.']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
    Select images to measure:Nucleus_raw_image
    Select objects to measure:Nucleus_object

MeasureGranularity:[module_num:127|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notes:['Measure granularity of nuclei.']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
    Select images to measure:Nucleus_raw_image
    Measure within objects?:Yes
    Select objects to measure:Nucleus_object
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureTexture:[module_num:128|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notes:['Measure texture of nuclei.']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
    Select images to measure:Nucleus_raw_image
    Select objects to measure:Nucleus_object
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureObjectNeighbors:[module_num:129|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notes:['This module determins neighbors of cells.']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
    Select objects to measure:Cell_border_object
    Select neighboring objects to measure:Cell_border_object
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
SaveImages:[module_num:130|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notes:['This module saves the image showing object outlines of nuclei, cell borders, and decoded in situ signals on the enhanced DAPI image.', '', 'CHANGE OUTPUT FOLDER!']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
    Select the type of image to save:Image
    Select the image to save:Overlay_decoded
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Overlay_ROI_
    Number of digits:0
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|CP_output_293LB
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ClassifyObjects:[module_num:131|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notes:['A random forest classifier was trained and tested on control samples (blood samples of healthy controls with and without spiked VCaP and PC-3 cells) using CellProfiler Analyst.', 'The training dataset contained 200 CTCs, 500 PBMCs, 100 artefacts, 100 in situ negative cells, and 100 in situ false positive cells.', '', 'Here, this classifier model is used to classify the cells in this sample.', '', '']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
    Make classification decision based on:Classifier Model
    Hidden:1
    Hidden:1
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
    Select the object name:Cell_border_object
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Elsewhere...|W:\\Analysis\\Lilli Hofmann\\PycharmProjects\\CTC_CoDuCo\\02_CellProfiler_decoding_classification
    Rules or classifier file name:CTC_CoDuCo_classifier.model
    Allow fuzzy feature matching?:Yes

ExportToSpreadsheet:[module_num:132|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notes:['This module will give you the export, of the number of blobs in each cell as well as the area and intensity of the blobs.', '', 'This module creates and saves text files containing the selected data: e.g.  the number of FITC, Cy3, and Cy5 blobs per cell and the measurements of area, integrated and mean intensity of blobs.', '', 'CHANGE OUTPUT FOLDER!']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|CP_output_293LB
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|ModuleError_72MaskObjects,Image|ModuleError_35FindMaxima,Image|ModuleError_12MaskImage,Image|ModuleError_32IdentifyPrimaryObjects,Image|ModuleError_96CombineObjects,Image|ModuleError_58IdentifyPrimaryObjects,Image|ModuleError_78ExpandOrShrinkObjects,Image|ModuleError_16CombineObjects,Image|ModuleError_38IdentifyPrimaryObjects,Image|ModuleError_69ConvertImageToObjects,Image|ModuleError_103MaskObjects,Image|ModuleError_111RelateObjects,Image|ModuleError_79MaskObjects,Image|ModuleError_108RelateObjects,Image|ModuleError_73MaskObjects,Image|ModuleError_117RelateObjects,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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